PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.0000, 0.0000, 0.0000
  expName = solo project
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instr
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    TextComponent instruction
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations. You have successfully finished the survey. Now, its time for the experiment.

        Pay attention to both the image and the word presented on the screen. First, look at the image and then the word.

        Press SPACE to begin experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine encoding
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent study_image
      image [set every repeat] = $imagefile
      pos = (-0.50, 0)
      size = (0.75, 0.75)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      units = norm
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    TextComponent studyword
      letterHeight = 0.12
      pos = (0.50, 0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $study_word
      units = norm
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  Routine testing
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    TextComponent t_word
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_word
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    SliderComponent slider_3
      color = White
      font = Lucida Sans Unicode Regular
      forceEndRoutine = True
      granularity = 1
      labels = "Old", "New"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2)
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  Routine end
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    TextComponent thanks
      letterHeight = 0.03
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Are you an online participant?

        If yes, press 'Yes.'
        If no, press the 'ESC' button on the keyboard.
    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0
      text = Yes
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  Routine test_instruction
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    TextComponent test_instr
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 2.0
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      text:
        In this task, you will be presented with words. If the word was presented in this study, press 'Old.' If the word was not presented in this study, press 'New.'

        Press SPACE to begin experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      syncScreenRefresh = False
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  Routine consent
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    TextComponent consentform
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This is a study on memory. You are free to exit the experiment at any time if you no longer wish to participate in the experiment. Your personal details will be kept confidential and not be disclosed in the research. If you would like to receive your performance data post the experiment, please email the researcher at tanishka.s@ahduni.edu.in. By pressing the below button, you consent to participating in the experiment.
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0
      text = I consent
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  Routine dsr_personal
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    TextComponent text
      letterHeight = 0.02
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please indicate how much you agree to the following statement or how true it is about yourself.
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    TextComponent question
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $dsr_per
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "Strongly disagree", "Mildly disagree", "Neither disagree nor agree", "Mildly agree", "Strongly agree"
      letterHeight = 0.025
      pos = (0, -0.1)
      size = (1.15, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4)
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  Routine dsr_experience
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    TextComponent text2
      letterHeight = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How disgusting would you find the following experience?
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    TextComponent question2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $dsr_exp
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      labels = "Not disgusting at all", "Slightly disgusting", "Moderately disgusting", "Very disgusting", "Extremely disgusting"
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.15, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 1, 2, 3, 4)
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  Routine brk
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    TextComponent text_4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We are almost at the end of the experiment. There is one last task remaining. If you would like, you can take a short break. Just ensure that you do not close the screen or press the escape button.

        When you are ready for the last task, press SPACE.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine lsas_instr
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    TextComponent text_5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a short survey. Reach each situation carefully. The first question asks how anxious or fearful you feel in the situation. The second questions asks how often you avoid the situation. If you come across a situation that you ordinarily do not experience, imagine "what if you were faced with that situation," and then, rate the degree to which you would fear or avoid this hypothetical situation.

        Please base your ratings on the way that the situations have affected you in the last week.

        Press SPACE to proceed.

        Please answer the first question first, and then the second. Answering the second question first would move on to the second question without recording the first one. It is important you answer all of them.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine lsas
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    TextComponent question_3
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $lsas_situation
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    TextComponent text_2
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How anxious or fearful would you feel in this situation?
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      labels = "None", "Mild", "Moderate", "Severe"
      letterHeight = 0.025
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.15, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 1, 2, 3)
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    TextComponent text_3
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = How often do you avoid this situation?
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    SliderComponent slider_5
      forceEndRoutine = True
      granularity = 1
      labels = "Never (0%)", "Occasionally (1-33%)", "Often (34-66%)", "Usually (67-100%)"
      letterHeight = 0.025
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.15, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 1, 2, 3)
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Flow
  Routine consent
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dsr_p.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'no_per': 1, 'dsr_per': 'I might be willing to try eating monkey meat, under some circumstances.'},
      {'no_per': 2, 'dsr_per': 'It would bother me to be in a science class and to see a human preserved in a jar.'},
      {'no_per': 3, 'dsr_per': 'It bothers me to hear someone clear a throat full of mucous.'},
      {'no_per': 4, 'dsr_per': 'I never let any part of my body touch the toilet seat in public restrooms.'},
      {'no_per': 5, 'dsr_per': 'I would go out of my way to avoid walking through a graveyard.'},
      {'no_per': 6, 'dsr_per': "Seeing a cockroach in someone else's house doesn't bother me."},
      {'no_per': 7, 'dsr_per': 'It would bother me tremendously to touch a dead body.'},
      {'no_per': 8, 'dsr_per': 'If I see someone vomit, it makes me sick to my stomach.'},
      {'no_per': 9, 'dsr_per': 'I probably would not go to my favorite restaurant if I found out that the cook had a cold.'},
      {'no_per': 10, 'dsr_per': 'It would not upset me at all to watch a person with a glass eye take the eye out of the socket.'},
      {'no_per': 11, 'dsr_per': 'It would bother me to see a rat run across my path in a park.'},
      {'no_per': 12, 'dsr_per': 'I would rather eat a piece of fruit than a piece of paper.'},
      {'no_per': 13, 'dsr_per': 'Even if I was hungry, I would not drink a bowl of my favorite soup if It had been stirred by a used but thoroughly washed flyswatter.'},
      {'no_per': 14, 'dsr_per': 'It would bother me to sleep in a nice hotel room if I knew that a man had died of a heart attack in that room the night before.'}]
    Routine dsr_personal
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = dsr_e.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'no_exp': 15, 'dsr_exp': 'You see maggots on a piece of meat in an outdoor or garbage pail.'},
      {'no_exp': 16, 'dsr_exp': 'You see person eating apple with a knife and fork.'},
      {'no_exp': 17, 'dsr_exp': 'While you are walking through a tunner under a railroad track, you smell urine.'},
      {'no_exp': 18, 'dsr_exp': 'You take a sip of soda, an then realize that you drank from the glass that an acquaintance of yours had been drinking from.'},
      {'no_exp': 19, 'dsr_exp': "Your friend's pet cat dies, and you have to pick up the dead body with your bare hands."},
      {'no_exp': 20, 'dsr_exp': 'You see someone put ketchup on vanilla ice cream and eat it.'},
      {'no_exp': 21, 'dsr_exp': 'You see a man with his intestines exposed after an accident.'},
      {'no_exp': 22, 'dsr_exp': 'You discover that a friend of yours changes underwear only once a week.'},
      {'no_exp': 23, 'dsr_exp': 'A friend offers you a piece of chocolate shaped like dog-doo.'},
      {'no_exp': 24, 'dsr_exp': 'You accidentally touch the ashes of a person who has been cremated.'},
      {'no_exp': 25, 'dsr_exp': 'You are about to drink a glass of milk when you smell that it is spoiled.'},
      {'no_exp': 26, 'dsr_exp': 'As a part of a sex education class, you are required to inflate a new unlubricated condom using your mouth.'},
      {'no_exp': 27, 'dsr_exp': 'You are walking barefoot on concrete, and you step on an earthworm.'}]
    Routine dsr_experience
  LoopTerminator trials_2
  Routine instr
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = imagestim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'images/1099_animals_neutral_lum.jpg', 'type': 'neutral', 'subtype': 'animal', 'study_word': 'coast'},
      {'imagefile': 'images/1044_food_neutral_lum.jpg', 'type': 'neutral', 'subtype': 'food', 'study_word': 'custom'},
      {'imagefile': 'images/1153_injuries_infections_lum.jpg', 'type': 'disgust', 'subtype': 'injury/infection', 'study_word': 'elevator'},
      {'imagefile': 'images/1062_animals_lum.jpg', 'type': 'disgust', 'subtype': 'animal', 'study_word': 'ennui'},
      {'imagefile': 'images/1165_injuries_infections_lum.jpg', 'type': 'disgust', 'subtype': 'injury/infection', 'study_word': 'glacier'},
      {'imagefile': 'images/1291_hygiene neutral_lum.jpg', 'type': 'neutral', 'subtype': 'hygeine', 'study_word': 'hard'},
      {'imagefile': 'images/1143_body products neutral_lum.jpg', 'type': 'neutral', 'subtype': 'body product', 'study_word': 'invest'},
      {'imagefile': 'images/1073_animals_lum.jpg', 'type': 'disgust', 'subtype': 'animal', 'study_word': 'journal'},
      {'imagefile': 'images/1202_death_lum.jpg', 'type': 'disgust', 'subtype': 'death', 'study_word': 'lantern'},
      {'imagefile': 'images/1093_animals_neutral_lum.jpg', 'type': 'neutral', 'subtype': 'animal', 'study_word': 'lighthouse'},
      {'imagefile': 'images/1271_hygiene_lum.jpg', 'type': 'disgust', 'subtype': 'hygeine', 'study_word': 'limber'},
      {'imagefile': 'images/1253_hygiene_lum.jpg', 'type': 'disgust', 'subtype': 'hygeine', 'study_word': 'manner'}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
    Routine encoding
  LoopTerminator trials_3
  Routine test_instruction
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = wordtest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'coast', 'old_new': 'old', 'type': 'neutral', 'subtype': 'animal'},
      {'test_word': 'custom', 'old_new': 'old', 'type': 'neutral', 'subtype': 'food'},
      {'test_word': 'elevator', 'old_new': 'old', 'type': 'disgust', 'subtype': 'injury/infection'},
      {'test_word': 'ennui', 'old_new': 'old', 'type': 'disgust', 'subtype': 'animal'},
      {'test_word': 'glacier', 'old_new': 'old', 'type': 'disgust', 'subtype': 'injury/infection'},
      {'test_word': 'hard', 'old_new': 'old', 'type': 'neutral', 'subtype': 'hygeine'},
      {'test_word': 'invest', 'old_new': 'old', 'type': 'neutral', 'subtype': 'body product'},
      {'test_word': 'journal', 'old_new': 'old', 'type': 'disgust', 'subtype': 'animal'},
      {'test_word': 'lantern', 'old_new': 'old', 'type': 'disgust', 'subtype': 'death'},
      {'test_word': 'lighthouse', 'old_new': 'old', 'type': 'neutral', 'subtype': 'animal'},
      {'test_word': 'limber', 'old_new': 'old', 'type': 'disgust', 'subtype': 'hygeine'},
      {'test_word': 'manner', 'old_new': 'old', 'type': 'disgust', 'subtype': 'hygeine'},
      {'test_word': 'material', 'old_new': 'old', 'type': 'disgust', 'subtype': 'body product'},
      {'test_word': 'mischief', 'old_new': 'old', 'type': 'disgust', 'subtype': 'death'},
      {'test_word': 'neurotic', 'old_new': 'old', 'type': 'neutral', 'subtype': 'death'},
      {'test_word': 'nursery', 'old_new': 'old', 'type': 'neutral', 'subtype': 'animal'},
      {'test_word': 'passage', 'old_new': 'old', 'type': 'disgust', 'subtype': 'body product'}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
    Routine testing
  LoopTerminator trials_4
  Routine end
  Routine brk
  Routine lsas_instr
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = lsas_survey.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lsas_no': 1, 'lsas_situation': 'Telephoning in public'},
      {'lsas_no': 2, 'lsas_situation': 'Participating in small groups'},
      {'lsas_no': 3, 'lsas_situation': 'Eating in public places'},
      {'lsas_no': 4, 'lsas_situation': 'Drinking with others in public places'},
      {'lsas_no': 5, 'lsas_situation': 'Talking to people in authority'},
      {'lsas_no': 6, 'lsas_situation': 'Acting, performing, or giving a talk in front of an audience'},
      {'lsas_no': 7, 'lsas_situation': 'Going to a party'},
      {'lsas_no': 8, 'lsas_situation': 'Working while being observed'},
      {'lsas_no': 9, 'lsas_situation': 'Writing while being observed'},
      {'lsas_no': 10, 'lsas_situation': "Calling someone you don't know very well"},
      {'lsas_no': 11, 'lsas_situation': "Talking with people you don't know very well"},
      {'lsas_no': 12, 'lsas_situation': 'Meeting strangers'},
      {'lsas_no': 13, 'lsas_situation': 'Urinating in a public bathroom'},
      {'lsas_no': 14, 'lsas_situation': 'Entering a room when others are already seated'},
      {'lsas_no': 15, 'lsas_situation': 'Being the center of attention'},
      {'lsas_no': 16, 'lsas_situation': 'Speaking up at a meeting'},
      {'lsas_no': 17, 'lsas_situation': 'Taking a test'},
      {'lsas_no': 18, 'lsas_situation': 'Expressing a disagreement or disapproval to people you don’t know very well'},
      {'lsas_no': 19, 'lsas_situation': "Looking at people you don't know very well in the eyes"},
      {'lsas_no': 20, 'lsas_situation': 'Giving a report to a group'},
      {'lsas_no': 21, 'lsas_situation': 'Trying to pick up someone'}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
    Routine lsas
  LoopTerminator trials_5
